dir = getDirectory("Choose input segment Directory ");      // prompts the user to select the folder to be processed, 
list = getFileList(dir);                                    // gives ImageJ a list of all files in the folder to work through
print("number of files in dir1 Segments",list.length); 

dir2 = getDirectory("Choose Output Image Directory "); // promts user to select folder to be saved in

setBatchMode(true);

for (f=0; f<list.length; f++) {
path = dir+list[f]; 
showProgress(f, list.length);
if (!endsWith(path,"/")) open(path); 
t=getTitle();  
//run("PNG..."); 
saveAs("PNG",dir2+t);
}
